<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="glimepiride_body">
  <units name="per_second">
    <unit exponent="-1" units="second"/>
  </units>
  <component name="sbml">
    <variable name="time" units="dimensionless"/>
    <variable name="Vre" units="dimensionless" initial_value="1"/>
    <variable name="Vgu" units="dimensionless" initial_value="1"/>
    <variable name="Vki" units="dimensionless" initial_value="1"/>
    <variable name="Vli" units="dimensionless" initial_value="1"/>
    <variable name="Vlu" units="dimensionless" initial_value="1"/>
    <variable name="Vve" units="dimensionless" initial_value="1"/>
    <variable name="Var" units="dimensionless" initial_value="1"/>
    <variable name="Vurine" units="dimensionless" initial_value="1"/>
    <variable name="Vfeces" units="dimensionless" initial_value="1"/>
    <variable name="Vstomach" units="dimensionless" initial_value="1"/>
    <variable name="Vpo" units="dimensionless" initial_value="1"/>
    <variable name="Vhv" units="dimensionless" initial_value="1"/>
    <variable name="Vki_tissue" units="dimensionless" initial_value="1"/>
    <variable name="Vki_plasma" units="dimensionless" initial_value="1"/>
    <variable name="Vli_tissue" units="dimensionless" initial_value="1"/>
    <variable name="Vli_plasma" units="dimensionless" initial_value="1"/>
    <variable name="Vlu_tissue" units="dimensionless" initial_value="1"/>
    <variable name="Vlu_plasma" units="dimensionless" initial_value="1"/>
    <variable name="Vgu_tissue" units="dimensionless" initial_value="1"/>
    <variable name="Vgu_plasma" units="dimensionless" initial_value="1"/>
    <variable name="Vre_tissue" units="dimensionless" initial_value="1"/>
    <variable name="Vre_plasma" units="dimensionless" initial_value="1"/>
    <variable name="BW" units="dimensionless" initial_value="75"/>
    <variable name="HEIGHT" units="dimensionless" initial_value="170"/>
    <variable name="HR" units="dimensionless" initial_value="70"/>
    <variable name="HRrest" units="dimensionless" initial_value="70"/>
    <variable name="BSA" units="dimensionless" initial_value="0"/>
    <variable name="COBW" units="dimensionless" initial_value="1.548"/>
    <variable name="f_cardiac_function" units="dimensionless" initial_value="1"/>
    <variable name="CO" units="dimensionless" initial_value="108.33"/>
    <variable name="QC" units="dimensionless" initial_value="6499800"/>
    <variable name="COHRI" units="dimensionless" initial_value="150"/>
    <variable name="Fblood" units="dimensionless" initial_value="0.02"/>
    <variable name="HCT" units="dimensionless" initial_value="0.51"/>
    <variable name="FVgu" units="dimensionless" initial_value="0.0171"/>
    <variable name="FVki" units="dimensionless" initial_value="0.0044"/>
    <variable name="FVli" units="dimensionless" initial_value="0.021"/>
    <variable name="FVlu" units="dimensionless" initial_value="0.0076"/>
    <variable name="FVre" units="dimensionless" initial_value="0"/>
    <variable name="FVve" units="dimensionless" initial_value="0.0514"/>
    <variable name="FVar" units="dimensionless" initial_value="0.0257"/>
    <variable name="FVpo" units="dimensionless" initial_value="0.001"/>
    <variable name="FVhv" units="dimensionless" initial_value="0.001"/>
    <variable name="FQgu" units="dimensionless" initial_value="0.18"/>
    <variable name="FQki" units="dimensionless" initial_value="0.19"/>
    <variable name="FQh" units="dimensionless" initial_value="0.215"/>
    <variable name="FQlu" units="dimensionless" initial_value="1"/>
    <variable name="FQre" units="dimensionless" initial_value="0"/>
    <variable name="f_cirrhosis" units="dimensionless" initial_value="0"/>
    <variable name="f_shunts" units="dimensionless" initial_value="0"/>
    <variable name="f_tissue_loss" units="dimensionless" initial_value="0"/>
    <variable name="PODOSE_gli" units="dimensionless" initial_value="0"/>
    <variable name="Mr_gli" units="dimensionless" initial_value="490.616"/>
    <variable name="ftissue_gli" units="dimensionless" initial_value="0.00070864179236918"/>
    <variable name="Kp_gli" units="dimensionless" initial_value="10.0205965652822"/>
    <variable name="IVDOSE_gli" units="dimensionless" initial_value="0"/>
    <variable name="ti_gli" units="dimensionless" initial_value="10"/>
    <variable name="Ki_gli" units="dimensionless" initial_value="0.02"/>
    <variable name="Ri_gli" units="dimensionless" initial_value="0"/>
    <variable name="cum_dose_gli" units="dimensionless" initial_value="0"/>
    <variable name="Mr_m1" units="dimensionless" initial_value="506.62"/>
    <variable name="ftissue_m1" units="dimensionless" initial_value="1"/>
    <variable name="Kp_m1" units="dimensionless" initial_value="660"/>
    <variable name="IVDOSE_m1" units="dimensionless" initial_value="0"/>
    <variable name="ti_m1" units="dimensionless" initial_value="10"/>
    <variable name="Ki_m1" units="dimensionless" initial_value="0.02"/>
    <variable name="Ri_m1" units="dimensionless" initial_value="0"/>
    <variable name="cum_dose_m1" units="dimensionless" initial_value="0"/>
    <variable name="Mr_m2" units="dimensionless" initial_value="520.6"/>
    <variable name="ftissue_m2" units="dimensionless" initial_value="1"/>
    <variable name="Kp_m2" units="dimensionless" initial_value="660"/>
    <variable name="IVDOSE_m2" units="dimensionless" initial_value="0"/>
    <variable name="ti_m2" units="dimensionless" initial_value="10"/>
    <variable name="Ki_m2" units="dimensionless" initial_value="0.02"/>
    <variable name="Ri_m2" units="dimensionless" initial_value="0"/>
    <variable name="cum_dose_m2" units="dimensionless" initial_value="0"/>
    <variable name="Qgu" units="dimensionless" initial_value="1"/>
    <variable name="Qki" units="dimensionless" initial_value="1"/>
    <variable name="Qh" units="dimensionless" initial_value="1"/>
    <variable name="Qha" units="dimensionless" initial_value="1"/>
    <variable name="Qlu" units="dimensionless" initial_value="1"/>
    <variable name="Qre" units="dimensionless" initial_value="1"/>
    <variable name="Qpo" units="dimensionless" initial_value="1"/>
    <variable name="Cki_plasma_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cli_plasma_gli" units="dimensionless" initial_value="0"/>
    <variable name="Clu_plasma_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cgu_plasma_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cre_plasma_gli" units="dimensionless" initial_value="0"/>
    <variable name="Car_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cve_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cpo_gli" units="dimensionless" initial_value="0"/>
    <variable name="Chv_gli" units="dimensionless" initial_value="0"/>
    <variable name="Clu_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cre_gli" units="dimensionless" initial_value="0"/>
    <variable name="Afeces_gli" units="dimensionless" initial_value="0"/>
    <variable name="Cki_plasma_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cli_plasma_m1" units="dimensionless" initial_value="0"/>
    <variable name="Clu_plasma_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cgu_plasma_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cre_plasma_m1" units="dimensionless" initial_value="0"/>
    <variable name="Car_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cve_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cpo_m1" units="dimensionless" initial_value="0"/>
    <variable name="Chv_m1" units="dimensionless" initial_value="0"/>
    <variable name="Clu_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cre_m1" units="dimensionless" initial_value="0"/>
    <variable name="Aurine_m1" units="dimensionless" initial_value="0"/>
    <variable name="Afeces_m1" units="dimensionless" initial_value="0"/>
    <variable name="Cki_plasma_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cli_plasma_m2" units="dimensionless" initial_value="0"/>
    <variable name="Clu_plasma_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cgu_plasma_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cre_plasma_m2" units="dimensionless" initial_value="0"/>
    <variable name="Car_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cve_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cpo_m2" units="dimensionless" initial_value="0"/>
    <variable name="Chv_m2" units="dimensionless" initial_value="0"/>
    <variable name="Clu_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cre_m2" units="dimensionless" initial_value="0"/>
    <variable name="Aurine_m2" units="dimensionless" initial_value="0"/>
    <variable name="Afeces_m2" units="dimensionless" initial_value="0"/>
    <variable name="Cve_m1_m2" units="dimensionless" initial_value="0"/>
    <variable name="Aurine_m1_m2" units="dimensionless" initial_value="0"/>
    <variable name="Afeces_m1_m2" units="dimensionless" initial_value="0"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>f_shunts</ci>
        <ci>f_cirrhosis</ci>
      </apply>
      <apply>
        <eq/>
        <ci>f_tissue_loss</ci>
        <ci>f_cirrhosis</ci>
      </apply>
      <apply>
        <eq/>
        <ci>FVre</ci>
        <apply>
          <minus/>
          <cn cellml:units="l_per_kg" type="integer">1</cn>
          <apply>
            <plus/>
            <ci>FVgu</ci>
            <ci>FVki</ci>
            <ci>FVli</ci>
            <ci>FVlu</ci>
            <ci>FVve</ci>
            <ci>FVar</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>FQre</ci>
        <apply>
          <minus/>
          <cn cellml:units="dimensionless" type="integer">1</cn>
          <apply>
            <plus/>
            <ci>FQki</ci>
            <ci>FQh</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>BSA</ci>
        <apply>
          <times/>
          <cn cellml:units="m2">0.024265</cn>
          <apply>
            <power/>
            <apply>
              <divide/>
              <ci>BW</ci>
              <cn cellml:units="kg" type="integer">1</cn>
            </apply>
            <cn>0.5378</cn>
          </apply>
          <apply>
            <power/>
            <apply>
              <divide/>
              <ci>HEIGHT</ci>
              <cn cellml:units="cm" type="integer">1</cn>
            </apply>
            <cn>0.3964</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>CO</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>f_cardiac_function</ci>
            <ci>BW</ci>
            <ci>COBW</ci>
          </apply>
          <apply>
            <divide/>
            <apply>
              <times/>
              <apply>
                <minus/>
                <ci>HR</ci>
                <ci>HRrest</ci>
              </apply>
              <ci>COHRI</ci>
            </apply>
            <cn cellml:units="s_per_min" type="integer">60</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>QC</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <ci>CO</ci>
            <cn cellml:units="ml_per_l" type="integer">1000</cn>
          </apply>
          <cn cellml:units="s_per_min" type="integer">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vgu</ci>
        <apply>
          <times/>
          <ci>BW</ci>
          <ci>FVgu</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vki</ci>
        <apply>
          <times/>
          <ci>BW</ci>
          <ci>FVki</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vli</ci>
        <apply>
          <times/>
          <ci>BW</ci>
          <ci>FVli</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vlu</ci>
        <apply>
          <times/>
          <ci>BW</ci>
          <ci>FVlu</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vre</ci>
        <apply>
          <times/>
          <ci>BW</ci>
          <ci>FVre</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vve</ci>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>BW</ci>
            <ci>FVve</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <divide/>
              <ci>FVve</ci>
              <apply>
                <plus/>
                <ci>FVar</ci>
                <ci>FVve</ci>
              </apply>
            </apply>
            <ci>BW</ci>
            <ci>Fblood</ci>
            <apply>
              <minus/>
              <apply>
                <minus/>
                <cn cellml:units="l_per_kg" type="integer">1</cn>
                <ci>FVve</ci>
              </apply>
              <ci>FVar</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Var</ci>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>BW</ci>
            <ci>FVar</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <divide/>
              <ci>FVar</ci>
              <apply>
                <plus/>
                <ci>FVar</ci>
                <ci>FVve</ci>
              </apply>
            </apply>
            <ci>BW</ci>
            <ci>Fblood</ci>
            <apply>
              <minus/>
              <apply>
                <minus/>
                <cn cellml:units="l_per_kg" type="integer">1</cn>
                <ci>FVve</ci>
              </apply>
              <ci>FVar</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vpo</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>BW</ci>
              <ci>FVpo</ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci>FVpo</ci>
                <apply>
                  <plus/>
                  <ci>FVar</ci>
                  <ci>FVve</ci>
                  <ci>FVpo</ci>
                  <ci>FVhv</ci>
                </apply>
              </apply>
              <ci>BW</ci>
              <ci>Fblood</ci>
              <apply>
                <minus/>
                <cn cellml:units="l_per_kg" type="integer">1</cn>
                <apply>
                  <plus/>
                  <ci>FVar</ci>
                  <ci>FVve</ci>
                  <ci>FVpo</ci>
                  <ci>FVhv</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vhv</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>BW</ci>
              <ci>FVhv</ci>
            </apply>
            <apply>
              <times/>
              <apply>
                <divide/>
                <ci>FVhv</ci>
                <apply>
                  <plus/>
                  <ci>FVar</ci>
                  <ci>FVve</ci>
                  <ci>FVpo</ci>
                  <ci>FVhv</ci>
                </apply>
              </apply>
              <ci>BW</ci>
              <ci>Fblood</ci>
              <apply>
                <minus/>
                <cn cellml:units="l_per_kg" type="integer">1</cn>
                <apply>
                  <plus/>
                  <ci>FVar</ci>
                  <ci>FVve</ci>
                  <ci>FVpo</ci>
                  <ci>FVhv</ci>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qgu</ci>
        <apply>
          <times/>
          <ci>QC</ci>
          <ci>FQgu</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qki</ci>
        <apply>
          <times/>
          <ci>QC</ci>
          <ci>FQki</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qh</ci>
        <apply>
          <times/>
          <ci>QC</ci>
          <ci>FQh</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qha</ci>
        <apply>
          <minus/>
          <ci>Qh</ci>
          <ci>Qgu</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qlu</ci>
        <apply>
          <times/>
          <ci>QC</ci>
          <ci>FQlu</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qre</ci>
        <apply>
          <times/>
          <ci>QC</ci>
          <ci>FQre</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Qpo</ci>
        <ci>Qgu</ci>
      </apply>
      <apply>
        <eq/>
        <ci>Vki_plasma</ci>
        <apply>
          <times/>
          <ci>Vki</ci>
          <ci>Fblood</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vki_tissue</ci>
        <apply>
          <times/>
          <ci>Vki</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>Fblood</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vli_plasma</ci>
        <apply>
          <times/>
          <ci>Vli</ci>
          <ci>Fblood</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vli_tissue</ci>
        <apply>
          <times/>
          <ci>Vli</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>f_tissue_loss</ci>
          </apply>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>Fblood</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vlu_plasma</ci>
        <apply>
          <times/>
          <ci>Vlu</ci>
          <ci>Fblood</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vlu_tissue</ci>
        <apply>
          <times/>
          <ci>Vlu</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>Fblood</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vgu_plasma</ci>
        <apply>
          <times/>
          <ci>Vgu</ci>
          <ci>Fblood</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vgu_tissue</ci>
        <apply>
          <times/>
          <ci>Vgu</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>Fblood</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vre_plasma</ci>
        <apply>
          <times/>
          <ci>Vre</ci>
          <ci>Fblood</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>HCT</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Vre_tissue</ci>
        <apply>
          <times/>
          <ci>Vre</ci>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless" type="integer">1</cn>
            <ci>Fblood</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Ki_gli</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">0.693</cn>
            <ci>ti_gli</ci>
          </apply>
          <cn cellml:units="s_per_min" type="integer">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Ki_m1</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">0.693</cn>
            <ci>ti_m1</ci>
          </apply>
          <cn cellml:units="s_per_min" type="integer">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Ki_m2</ci>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">0.693</cn>
            <ci>ti_m2</ci>
          </apply>
          <cn cellml:units="s_per_min" type="integer">60</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Cve_m1_m2</ci>
        <apply>
          <plus/>
          <ci>Cve_m1</ci>
          <ci>Cve_m2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Aurine_m1_m2</ci>
        <apply>
          <plus/>
          <ci>Aurine_m1</ci>
          <ci>Aurine_m2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>Afeces_m1_m2</ci>
        <apply>
          <plus/>
          <ci>Afeces_m1</ci>
          <ci>Afeces_m2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>ftissue_m1</ci>
        <ci>ftissue_gli</ci>
      </apply>
      <apply>
        <eq/>
        <ci>Kp_m1</ci>
        <ci>Kp_gli</ci>
      </apply>
      <apply>
        <eq/>
        <ci>ftissue_m2</ci>
        <ci>ftissue_gli</ci>
      </apply>
      <apply>
        <eq/>
        <ci>Kp_m2</ci>
        <ci>Kp_gli</ci>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>IVDOSE_gli</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <ci>iv_gli</ci>
            </apply>
            <ci>Mr_gli</ci>
          </apply>
          <ci>Ri_gli</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>cum_dose_gli</ci>
        </apply>
        <ci>Ri_gli</ci>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>IVDOSE_m1</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <ci>iv_m1</ci>
            </apply>
            <ci>Mr_m1</ci>
          </apply>
          <ci>Ri_m1</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>cum_dose_m1</ci>
        </apply>
        <ci>Ri_m1</ci>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>IVDOSE_m2</ci>
        </apply>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <ci>iv_m2</ci>
            </apply>
            <ci>Mr_m2</ci>
          </apply>
          <ci>Ri_m2</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>cum_dose_m2</ci>
        </apply>
        <ci>Ri_m2</ci>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_plasma_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_gli</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Clu_plasma_gli</ci>
                      <ci>Kp_gli</ci>
                    </apply>
                    <ci>Clu_gli</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qlu</ci>
              <ci>Clu_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_tissue</ci>
          </apply>
          <ci>ftissue_gli</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Clu_plasma_gli</ci>
              <ci>Kp_gli</ci>
            </apply>
            <ci>Clu_gli</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_plasma_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_gli</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Cre_plasma_gli</ci>
                      <ci>Kp_gli</ci>
                    </apply>
                    <ci>Cre_gli</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qre</ci>
                <ci>Car_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_tissue</ci>
          </apply>
          <ci>ftissue_gli</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Cre_plasma_gli</ci>
              <ci>Kp_gli</ci>
            </apply>
            <ci>Cre_gli</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cve_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vve</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>Ki_gli</ci>
                    <ci>IVDOSE_gli</ci>
                  </apply>
                  <ci>Mr_gli</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qki</ci>
                  <ci>Cki_plasma_gli</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qh</ci>
                  <ci>Chv_gli</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Car_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Var</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <apply>
                      <minus/>
                      <apply>
                        <times/>
                        <ci>Qki</ci>
                        <ci>Car_gli</ci>
                      </apply>
                    </apply>
                    <apply>
                      <times/>
                      <apply>
                        <minus/>
                        <cn cellml:units="dimensionless" type="integer">1</cn>
                        <ci>f_shunts</ci>
                      </apply>
                      <ci>Qha</ci>
                      <ci>Car_gli</ci>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <ci>f_shunts</ci>
                    <ci>Qha</ci>
                    <ci>Car_gli</ci>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci>Qlu</ci>
                  <ci>Clu_plasma_gli</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qgu</ci>
                <ci>Car_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Car_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cki_plasma_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vki_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Car_gli</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Cki_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cli_plasma_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vli_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qha</ci>
                <ci>Car_gli</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qpo</ci>
                <ci>Cpo_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless" type="integer">1</cn>
                <ci>f_shunts</ci>
              </apply>
              <apply>
                <plus/>
                <ci>Qpo</ci>
                <ci>Qha</ci>
              </apply>
              <ci>Cli_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Chv_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vhv</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qha</ci>
                <ci>Car_gli</ci>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_gli</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>Qpo</ci>
                  <ci>Qha</ci>
                </apply>
                <ci>Cli_plasma_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qh</ci>
              <ci>Chv_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cpo_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vpo</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless" type="integer">1</cn>
                    <ci>f_shunts</ci>
                  </apply>
                  <ci>Qpo</ci>
                  <ci>Cpo_gli</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_gli</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cgu_plasma_gli</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vgu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Car_gli</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_gli</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_plasma_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_m1</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Clu_plasma_m1</ci>
                      <ci>Kp_m1</ci>
                    </apply>
                    <ci>Clu_m1</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qlu</ci>
              <ci>Clu_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_tissue</ci>
          </apply>
          <ci>ftissue_m1</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Clu_plasma_m1</ci>
              <ci>Kp_m1</ci>
            </apply>
            <ci>Clu_m1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_plasma_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_m1</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Cre_plasma_m1</ci>
                      <ci>Kp_m1</ci>
                    </apply>
                    <ci>Cre_m1</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qre</ci>
                <ci>Car_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_tissue</ci>
          </apply>
          <ci>ftissue_m1</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Cre_plasma_m1</ci>
              <ci>Kp_m1</ci>
            </apply>
            <ci>Cre_m1</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cve_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vve</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>Ki_m1</ci>
                    <ci>IVDOSE_m1</ci>
                  </apply>
                  <ci>Mr_m1</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qki</ci>
                  <ci>Cki_plasma_m1</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qh</ci>
                  <ci>Chv_m1</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Car_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Var</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <apply>
                      <minus/>
                      <apply>
                        <times/>
                        <ci>Qki</ci>
                        <ci>Car_m1</ci>
                      </apply>
                    </apply>
                    <apply>
                      <times/>
                      <apply>
                        <minus/>
                        <cn cellml:units="dimensionless" type="integer">1</cn>
                        <ci>f_shunts</ci>
                      </apply>
                      <ci>Qha</ci>
                      <ci>Car_m1</ci>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <ci>f_shunts</ci>
                    <ci>Qha</ci>
                    <ci>Car_m1</ci>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci>Qlu</ci>
                  <ci>Clu_plasma_m1</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qgu</ci>
                <ci>Car_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Car_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cki_plasma_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vki_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Car_m1</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Cki_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cli_plasma_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vli_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qha</ci>
                <ci>Car_m1</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qpo</ci>
                <ci>Cpo_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless" type="integer">1</cn>
                <ci>f_shunts</ci>
              </apply>
              <apply>
                <plus/>
                <ci>Qpo</ci>
                <ci>Qha</ci>
              </apply>
              <ci>Cli_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Chv_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vhv</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qha</ci>
                <ci>Car_m1</ci>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_m1</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>Qpo</ci>
                  <ci>Qha</ci>
                </apply>
                <ci>Cli_plasma_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qh</ci>
              <ci>Chv_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cpo_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vpo</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless" type="integer">1</cn>
                    <ci>f_shunts</ci>
                  </apply>
                  <ci>Qpo</ci>
                  <ci>Cpo_m1</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_m1</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cgu_plasma_m1</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vgu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Car_m1</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_m1</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_plasma_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_m2</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Clu_plasma_m2</ci>
                      <ci>Kp_m2</ci>
                    </apply>
                    <ci>Clu_m2</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qlu</ci>
              <ci>Clu_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Clu_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vlu_tissue</ci>
          </apply>
          <ci>ftissue_m2</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Clu_plasma_m2</ci>
              <ci>Kp_m2</ci>
            </apply>
            <ci>Clu_m2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_plasma_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <ci>ftissue_m2</ci>
                  <apply>
                    <minus/>
                    <apply>
                      <times/>
                      <ci>Cre_plasma_m2</ci>
                      <ci>Kp_m2</ci>
                    </apply>
                    <ci>Cre_m2</ci>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qre</ci>
                <ci>Car_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cre_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vre_tissue</ci>
          </apply>
          <ci>ftissue_m2</ci>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Cre_plasma_m2</ci>
              <ci>Kp_m2</ci>
            </apply>
            <ci>Cre_m2</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cve_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vve</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <divide/>
                  <apply>
                    <times/>
                    <ci>Ki_m2</ci>
                    <ci>IVDOSE_m2</ci>
                  </apply>
                  <ci>Mr_m2</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qki</ci>
                  <ci>Cki_plasma_m2</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>Qh</ci>
                  <ci>Chv_m2</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qlu</ci>
                <ci>Cve_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Cre_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Car_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Var</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <minus/>
              <apply>
                <plus/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <apply>
                      <minus/>
                      <apply>
                        <times/>
                        <ci>Qki</ci>
                        <ci>Car_m2</ci>
                      </apply>
                    </apply>
                    <apply>
                      <times/>
                      <apply>
                        <minus/>
                        <cn cellml:units="dimensionless" type="integer">1</cn>
                        <ci>f_shunts</ci>
                      </apply>
                      <ci>Qha</ci>
                      <ci>Car_m2</ci>
                    </apply>
                  </apply>
                  <apply>
                    <times/>
                    <ci>f_shunts</ci>
                    <ci>Qha</ci>
                    <ci>Car_m2</ci>
                  </apply>
                </apply>
                <apply>
                  <times/>
                  <ci>Qlu</ci>
                  <ci>Clu_plasma_m2</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>Qgu</ci>
                <ci>Car_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qre</ci>
              <ci>Car_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cki_plasma_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vki_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Car_m2</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qki</ci>
              <ci>Cki_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cli_plasma_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vli_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qha</ci>
                <ci>Car_m2</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <ci>Qpo</ci>
                <ci>Cpo_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless" type="integer">1</cn>
                <ci>f_shunts</ci>
              </apply>
              <apply>
                <plus/>
                <ci>Qpo</ci>
                <ci>Qha</ci>
              </apply>
              <ci>Cli_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Chv_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vhv</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qha</ci>
                <ci>Car_m2</ci>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_m2</ci>
              </apply>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless" type="integer">1</cn>
                  <ci>f_shunts</ci>
                </apply>
                <apply>
                  <plus/>
                  <ci>Qpo</ci>
                  <ci>Qha</ci>
                </apply>
                <ci>Cli_plasma_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qh</ci>
              <ci>Chv_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cpo_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vpo</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <minus/>
              <apply>
                <minus/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless" type="integer">1</cn>
                    <ci>f_shunts</ci>
                  </apply>
                  <ci>Qpo</ci>
                  <ci>Cpo_m2</ci>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>f_shunts</ci>
                <ci>Qpo</ci>
                <ci>Cpo_m2</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>Cgu_plasma_m2</ci>
        </apply>
        <apply>
          <times/>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>Vgu_plasma</ci>
          </apply>
          <apply>
            <minus/>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Car_m2</ci>
            </apply>
            <apply>
              <times/>
              <ci>Qgu</ci>
              <ci>Cgu_plasma_m2</ci>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
</model>
